<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>COM Port</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Teensy 4.1</ard:Name>
          <ard:PortName>COM5</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>1</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Recording Duration</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT45M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Sync Recording</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>9</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>9</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:Pin>12</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>lick</Name>
        <rx:BufferSize>1</rx:BufferSize>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>lick2</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Trial Loop</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>lick</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Initial Delay</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Mouse Waiting?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Cue</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.25S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>33</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Response</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>lick2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialState</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2.5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Hit</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.25S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>26</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Miss</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>No Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.25S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>25</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Random ITI</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>10</p1:Lower>
                <p1:Upper>20</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>10000000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT11.8933109S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Behavior Camera</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\Jeremy\Documents\BehaviorCam-.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>640</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Rotary Encoder</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\Jeremy\Documents\RotaryEncoder-.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Capacitive Sensor</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\Jeremy\Documents\CapacitiveSensor-.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Vibrissae Piezo</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\Jeremy\Documents\VibrissaePiezo-.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Reward Solenoid</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>3</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\Jeremy\Documents\RewardSolenoid-.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Faliure Solenoid</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>4</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\Jeremy\Documents\FailureSolenoid-.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Frame Counter</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>2</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\Jeremy\Documents\FrameCounter-.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="32" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="35" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="45" Label="Source1" />
      <Edge From="44" To="45" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="45" To="48" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="53" Label="Source1" />
      <Edge From="52" To="53" Label="Source2" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="53" To="56" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="61" Label="Source1" />
      <Edge From="60" To="61" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="61" To="64" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="69" Label="Source1" />
      <Edge From="68" To="69" Label="Source2" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="69" To="72" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="77" Label="Source1" />
      <Edge From="76" To="77" Label="Source2" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="77" To="80" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="83" To="85" Label="Source1" />
      <Edge From="84" To="85" Label="Source2" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="85" To="88" Label="Source1" />
      <Edge From="86" To="87" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>