<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>COM Port</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Teensy 4.1</ard:Name>
          <ard:PortName>COM11</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>1</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Recording Duration</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT30S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Trial Loop</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:Pin>39</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT10S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Mouse Waiting?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Cue</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.25S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>41</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.25S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>32</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Sample ITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>2</p1:Lower>
                <p1:Upper>7</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>10000000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT3.8018687S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Response</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Response</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Sucess</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.1S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>34</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Miss</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Fail</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.1S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>34</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>8</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="28" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>